begin model
begin parameters
  fwd_LACTOSE_MUTAROTATION              1.000000e+00
  rvs_LACTOSE_MUTAROTATION              1.000000e+00
  fwd_GALACTOSE_MUTAROTATION            1.000000e+00
  rvs_GALACTOSE_MUTAROTATION            1.000000e+00
  fwd_GLUCOSE_MUTAROTATION              1.000000e+00
  rvs_GLUCOSE_MUTAROTATION              1.000000e+00
  fwd_TRANS_RXN_24                      1.000000e+00
  rvs_TRANS_RXN_24                      0.000000e+00
  fwd_TRANS_RXN_24_beta                 1.000000e+00
  rvs_TRANS_RXN_24_beta                 0.000000e+00
  fwd_TRANS_RXN_94                      1.000000e+00
  rvs_TRANS_RXN_94                      1.000000e+00
  fwd_RXN0_7215                         1.000000e+00
  rvs_RXN0_7215                         1.000000e+00
  fwd_RXN0_7217                         1.000000e+00
  rvs_RXN0_7217                         1.000000e+00
  fwd_RXN_17755                         1.000000e+00
  rvs_RXN_17755                         1.000000e+00
  fwd_BETAGALACTOSID_RXN                1.000000e+00
  rvs_BETAGALACTOSID_RXN                0.000000e+00
  fwd_BETAGALACTOSID_RXN_alpha          1.000000e+00
  rvs_BETAGALACTOSID_RXN_alpha          0.000000e+00
  fwd_RXN0_5363                         1.000000e+00
  rvs_RXN0_5363                         1.000000e+00
  fwd_RXN0_5363_beta                    1.000000e+00
  rvs_RXN0_5363_beta                    1.000000e+00
  fwd_ALLOLACTOSE_DEG_alpha             1.000000e+00
  rvs_ALLOLACTOSE_DEG_alpha             0.000000e+00
  fwd_ALLOLACTOSE_DEG_beta              1.000000e+00
  rvs_ALLOLACTOSE_DEG_beta              0.000000e+00
  fwd_RXN_17726                         1.000000e+00
  rvs_RXN_17726                         1.000000e+00
  fwd_RXN0_7219                         1.000000e+00
  rvs_RXN0_7219                         1.000000e+00
  fwd_GALACTOACETYLTRAN_RXN_galactose   1.000000e+00
  rvs_GALACTOACETYLTRAN_RXN_galactose   1.000000e+00
  t0_ACETYL_COA_cyt                     0.000000e+00
  t0_ACETYL_COA_per                     0.000000e+00
  t0_ACETYL_COA_ex                      0.000000e+00
  t0_CO_A_cyt                           0.000000e+00
  t0_CO_A_per                           0.000000e+00
  t0_CO_A_ex                            0.000000e+00
  t0_CPD_3561_cyt                       0.000000e+00
  t0_CPD_3561_per                       0.000000e+00
  t0_CPD_3561_ex                        0.000000e+00
  t0_CPD_3785_cyt                       0.000000e+00
  t0_CPD_3785_per                       0.000000e+00
  t0_CPD_3785_ex                        0.000000e+00
  t0_CPD_3801_cyt                       0.000000e+00
  t0_CPD_3801_per                       0.000000e+00
  t0_CPD_3801_ex                        0.000000e+00
  t0_D_ARABINOSE_cyt                    0.000000e+00
  t0_D_ARABINOSE_per                    0.000000e+00
  t0_D_ARABINOSE_ex                     0.000000e+00
  t0_Fructofuranose_cyt                 0.000000e+00
  t0_Fructofuranose_per                 0.000000e+00
  t0_Fructofuranose_ex                  0.000000e+00
  t0_MELIBIOSE_cyt                      0.000000e+00
  t0_MELIBIOSE_per                      0.000000e+00
  t0_MELIBIOSE_ex                       0.000000e+00
  t0_PROTON_cyt                         0.000000e+00
  t0_PROTON_per                         1.000000e+02
  t0_PROTON_ex                          0.000000e+00
  t0_WATER_cyt                          1.000000e+02
  t0_WATER_per                          0.000000e+00
  t0_WATER_ex                           0.000000e+00
  t0__6_Acetyl_beta_D_Galactose_cyt     0.000000e+00
  t0__6_Acetyl_beta_D_Galactose_per     0.000000e+00
  t0__6_Acetyl_beta_D_Galactose_ex      0.000000e+00
  t0_alpha_ALLOLACTOSE_cyt              0.000000e+00
  t0_alpha_ALLOLACTOSE_per              0.000000e+00
  t0_alpha_ALLOLACTOSE_ex               0.000000e+00
  t0_alpha_GALACTOSE_cyt                0.000000e+00
  t0_alpha_GALACTOSE_per                0.000000e+00
  t0_alpha_GALACTOSE_ex                 0.000000e+00
  t0_alpha_glucose_cyt                  0.000000e+00
  t0_alpha_glucose_per                  0.000000e+00
  t0_alpha_glucose_ex                   0.000000e+00
  t0_alpha_lactose_cyt                  0.000000e+00
  t0_alpha_lactose_per                  0.000000e+00
  t0_alpha_lactose_ex                   0.000000e+00
  t0_beta_ALLOLACTOSE_cyt               0.000000e+00
  t0_beta_ALLOLACTOSE_per               0.000000e+00
  t0_beta_ALLOLACTOSE_ex                0.000000e+00
  t0_beta_GALACTOSE_cyt                 0.000000e+00
  t0_beta_GALACTOSE_per                 0.000000e+00
  t0_beta_GALACTOSE_ex                  0.000000e+00
  t0_beta_glucose_cyt                   0.000000e+00
  t0_beta_glucose_per                   0.000000e+00
  t0_beta_glucose_ex                    0.000000e+00
  t0_beta_lactose_cyt                   0.000000e+00
  t0_beta_lactose_per                   1.000000e+02
  t0_beta_lactose_ex                    0.000000e+00
  t0_LACY_MONOMER_cyt                   1.000000e+00
  t0_LACY_MONOMER_mem                   0.000000e+00
  t0_LACY_MONOMER_per                   0.000000e+00
  t0_LACY_MONOMER_ex                    0.000000e+00
  t0_BETAGALACTOSID_CPLX_cyt            1.000000e+00
  t0_BETAGALACTOSID_CPLX_mem            0.000000e+00
  t0_BETAGALACTOSID_CPLX_per            0.000000e+00
  t0_BETAGALACTOSID_CPLX_ex             0.000000e+00
  t0_GALACTOACETYLTRAN_CPLX_cyt         1.000000e+00
  t0_GALACTOACETYLTRAN_CPLX_mem         0.000000e+00
  t0_GALACTOACETYLTRAN_CPLX_per         0.000000e+00
  t0_GALACTOACETYLTRAN_CPLX_ex          0.000000e+00
end parameters

begin molecule types
  met(name~ACETYL_COA~CO_A~CPD_3561~CPD_3785~CPD_3801~D_ARABINOSE~Fructofuranose~MELIBIOSE~PROTON~WATER~_6_Acetyl_beta_D_Galactose~alpha_ALLOLACTOSE~alpha_GALACTOSE~alpha_glucose~alpha_lactose~beta_ALLOLACTOSE~beta_GALACTOSE~beta_glucose~beta_lactose,loc~cyt~per~ex,prot)
  prot(name~LACY_MONOMER,loc~cyt~mem~per~ex,prot)
  cplx(name~BETAGALACTOSID_CPLX~GALACTOACETYLTRAN_CPLX,loc~cyt~mem~per~ex,prot)
end molecule types

begin observables
  Molecules obs_ACETYL_COA_cyt                   met(name~ACETYL_COA,loc~cyt,prot)
  Molecules obs_ACETYL_COA_per                   met(name~ACETYL_COA,loc~per,prot)
  Molecules obs_ACETYL_COA_ex                    met(name~ACETYL_COA,loc~ex,prot)
  Molecules obs_CO_A_cyt                         met(name~CO_A,loc~cyt,prot)
  Molecules obs_CO_A_per                         met(name~CO_A,loc~per,prot)
  Molecules obs_CO_A_ex                          met(name~CO_A,loc~ex,prot)
  Molecules obs_CPD_3561_cyt                     met(name~CPD_3561,loc~cyt,prot)
  Molecules obs_CPD_3561_per                     met(name~CPD_3561,loc~per,prot)
  Molecules obs_CPD_3561_ex                      met(name~CPD_3561,loc~ex,prot)
  Molecules obs_CPD_3785_cyt                     met(name~CPD_3785,loc~cyt,prot)
  Molecules obs_CPD_3785_per                     met(name~CPD_3785,loc~per,prot)
  Molecules obs_CPD_3785_ex                      met(name~CPD_3785,loc~ex,prot)
  Molecules obs_CPD_3801_cyt                     met(name~CPD_3801,loc~cyt,prot)
  Molecules obs_CPD_3801_per                     met(name~CPD_3801,loc~per,prot)
  Molecules obs_CPD_3801_ex                      met(name~CPD_3801,loc~ex,prot)
  Molecules obs_D_ARABINOSE_cyt                  met(name~D_ARABINOSE,loc~cyt,prot)
  Molecules obs_D_ARABINOSE_per                  met(name~D_ARABINOSE,loc~per,prot)
  Molecules obs_D_ARABINOSE_ex                   met(name~D_ARABINOSE,loc~ex,prot)
  Molecules obs_Fructofuranose_cyt               met(name~Fructofuranose,loc~cyt,prot)
  Molecules obs_Fructofuranose_per               met(name~Fructofuranose,loc~per,prot)
  Molecules obs_Fructofuranose_ex                met(name~Fructofuranose,loc~ex,prot)
  Molecules obs_MELIBIOSE_cyt                    met(name~MELIBIOSE,loc~cyt,prot)
  Molecules obs_MELIBIOSE_per                    met(name~MELIBIOSE,loc~per,prot)
  Molecules obs_MELIBIOSE_ex                     met(name~MELIBIOSE,loc~ex,prot)
  Molecules obs_PROTON_cyt                       met(name~PROTON,loc~cyt,prot)
  Molecules obs_PROTON_per                       met(name~PROTON,loc~per,prot)
  Molecules obs_PROTON_ex                        met(name~PROTON,loc~ex,prot)
  Molecules obs_WATER_cyt                        met(name~WATER,loc~cyt,prot)
  Molecules obs_WATER_per                        met(name~WATER,loc~per,prot)
  Molecules obs_WATER_ex                         met(name~WATER,loc~ex,prot)
  Molecules obs__6_Acetyl_beta_D_Galactose_cyt   met(name~_6_Acetyl_beta_D_Galactose,loc~cyt,prot)
  Molecules obs__6_Acetyl_beta_D_Galactose_per   met(name~_6_Acetyl_beta_D_Galactose,loc~per,prot)
  Molecules obs__6_Acetyl_beta_D_Galactose_ex    met(name~_6_Acetyl_beta_D_Galactose,loc~ex,prot)
  Molecules obs_alpha_ALLOLACTOSE_cyt            met(name~alpha_ALLOLACTOSE,loc~cyt,prot)
  Molecules obs_alpha_ALLOLACTOSE_per            met(name~alpha_ALLOLACTOSE,loc~per,prot)
  Molecules obs_alpha_ALLOLACTOSE_ex             met(name~alpha_ALLOLACTOSE,loc~ex,prot)
  Molecules obs_alpha_GALACTOSE_cyt              met(name~alpha_GALACTOSE,loc~cyt,prot)
  Molecules obs_alpha_GALACTOSE_per              met(name~alpha_GALACTOSE,loc~per,prot)
  Molecules obs_alpha_GALACTOSE_ex               met(name~alpha_GALACTOSE,loc~ex,prot)
  Molecules obs_alpha_glucose_cyt                met(name~alpha_glucose,loc~cyt,prot)
  Molecules obs_alpha_glucose_per                met(name~alpha_glucose,loc~per,prot)
  Molecules obs_alpha_glucose_ex                 met(name~alpha_glucose,loc~ex,prot)
  Molecules obs_alpha_lactose_cyt                met(name~alpha_lactose,loc~cyt,prot)
  Molecules obs_alpha_lactose_per                met(name~alpha_lactose,loc~per,prot)
  Molecules obs_alpha_lactose_ex                 met(name~alpha_lactose,loc~ex,prot)
  Molecules obs_beta_ALLOLACTOSE_cyt             met(name~beta_ALLOLACTOSE,loc~cyt,prot)
  Molecules obs_beta_ALLOLACTOSE_per             met(name~beta_ALLOLACTOSE,loc~per,prot)
  Molecules obs_beta_ALLOLACTOSE_ex              met(name~beta_ALLOLACTOSE,loc~ex,prot)
  Molecules obs_beta_GALACTOSE_cyt               met(name~beta_GALACTOSE,loc~cyt,prot)
  Molecules obs_beta_GALACTOSE_per               met(name~beta_GALACTOSE,loc~per,prot)
  Molecules obs_beta_GALACTOSE_ex                met(name~beta_GALACTOSE,loc~ex,prot)
  Molecules obs_beta_glucose_cyt                 met(name~beta_glucose,loc~cyt,prot)
  Molecules obs_beta_glucose_per                 met(name~beta_glucose,loc~per,prot)
  Molecules obs_beta_glucose_ex                  met(name~beta_glucose,loc~ex,prot)
  Molecules obs_beta_lactose_cyt                 met(name~beta_lactose,loc~cyt,prot)
  Molecules obs_beta_lactose_per                 met(name~beta_lactose,loc~per,prot)
  Molecules obs_beta_lactose_ex                  met(name~beta_lactose,loc~ex,prot)
end observables

begin species
  met(name~ACETYL_COA,loc~cyt,prot)                   t0_ACETYL_COA_cyt
  met(name~ACETYL_COA,loc~per,prot)                   t0_ACETYL_COA_per
  met(name~ACETYL_COA,loc~ex,prot)                    t0_ACETYL_COA_ex
  met(name~CO_A,loc~cyt,prot)                         t0_CO_A_cyt
  met(name~CO_A,loc~per,prot)                         t0_CO_A_per
  met(name~CO_A,loc~ex,prot)                          t0_CO_A_ex
  met(name~CPD_3561,loc~cyt,prot)                     t0_CPD_3561_cyt
  met(name~CPD_3561,loc~per,prot)                     t0_CPD_3561_per
  met(name~CPD_3561,loc~ex,prot)                      t0_CPD_3561_ex
  met(name~CPD_3785,loc~cyt,prot)                     t0_CPD_3785_cyt
  met(name~CPD_3785,loc~per,prot)                     t0_CPD_3785_per
  met(name~CPD_3785,loc~ex,prot)                      t0_CPD_3785_ex
  met(name~CPD_3801,loc~cyt,prot)                     t0_CPD_3801_cyt
  met(name~CPD_3801,loc~per,prot)                     t0_CPD_3801_per
  met(name~CPD_3801,loc~ex,prot)                      t0_CPD_3801_ex
  met(name~D_ARABINOSE,loc~cyt,prot)                  t0_D_ARABINOSE_cyt
  met(name~D_ARABINOSE,loc~per,prot)                  t0_D_ARABINOSE_per
  met(name~D_ARABINOSE,loc~ex,prot)                   t0_D_ARABINOSE_ex
  met(name~Fructofuranose,loc~cyt,prot)               t0_Fructofuranose_cyt
  met(name~Fructofuranose,loc~per,prot)               t0_Fructofuranose_per
  met(name~Fructofuranose,loc~ex,prot)                t0_Fructofuranose_ex
  met(name~MELIBIOSE,loc~cyt,prot)                    t0_MELIBIOSE_cyt
  met(name~MELIBIOSE,loc~per,prot)                    t0_MELIBIOSE_per
  met(name~MELIBIOSE,loc~ex,prot)                     t0_MELIBIOSE_ex
  met(name~PROTON,loc~cyt,prot)                       t0_PROTON_cyt
  met(name~PROTON,loc~per,prot)                       t0_PROTON_per
  met(name~PROTON,loc~ex,prot)                        t0_PROTON_ex
  met(name~WATER,loc~cyt,prot)                        t0_WATER_cyt
  met(name~WATER,loc~per,prot)                        t0_WATER_per
  met(name~WATER,loc~ex,prot)                         t0_WATER_ex
  met(name~_6_Acetyl_beta_D_Galactose,loc~cyt,prot)   t0__6_Acetyl_beta_D_Galactose_cyt
  met(name~_6_Acetyl_beta_D_Galactose,loc~per,prot)   t0__6_Acetyl_beta_D_Galactose_per
  met(name~_6_Acetyl_beta_D_Galactose,loc~ex,prot)    t0__6_Acetyl_beta_D_Galactose_ex
  met(name~alpha_ALLOLACTOSE,loc~cyt,prot)            t0_alpha_ALLOLACTOSE_cyt
  met(name~alpha_ALLOLACTOSE,loc~per,prot)            t0_alpha_ALLOLACTOSE_per
  met(name~alpha_ALLOLACTOSE,loc~ex,prot)             t0_alpha_ALLOLACTOSE_ex
  met(name~alpha_GALACTOSE,loc~cyt,prot)              t0_alpha_GALACTOSE_cyt
  met(name~alpha_GALACTOSE,loc~per,prot)              t0_alpha_GALACTOSE_per
  met(name~alpha_GALACTOSE,loc~ex,prot)               t0_alpha_GALACTOSE_ex
  met(name~alpha_glucose,loc~cyt,prot)                t0_alpha_glucose_cyt
  met(name~alpha_glucose,loc~per,prot)                t0_alpha_glucose_per
  met(name~alpha_glucose,loc~ex,prot)                 t0_alpha_glucose_ex
  met(name~alpha_lactose,loc~cyt,prot)                t0_alpha_lactose_cyt
  met(name~alpha_lactose,loc~per,prot)                t0_alpha_lactose_per
  met(name~alpha_lactose,loc~ex,prot)                 t0_alpha_lactose_ex
  met(name~beta_ALLOLACTOSE,loc~cyt,prot)             t0_beta_ALLOLACTOSE_cyt
  met(name~beta_ALLOLACTOSE,loc~per,prot)             t0_beta_ALLOLACTOSE_per
  met(name~beta_ALLOLACTOSE,loc~ex,prot)              t0_beta_ALLOLACTOSE_ex
  met(name~beta_GALACTOSE,loc~cyt,prot)               t0_beta_GALACTOSE_cyt
  met(name~beta_GALACTOSE,loc~per,prot)               t0_beta_GALACTOSE_per
  met(name~beta_GALACTOSE,loc~ex,prot)                t0_beta_GALACTOSE_ex
  met(name~beta_glucose,loc~cyt,prot)                 t0_beta_glucose_cyt
  met(name~beta_glucose,loc~per,prot)                 t0_beta_glucose_per
  met(name~beta_glucose,loc~ex,prot)                  t0_beta_glucose_ex
  met(name~beta_lactose,loc~cyt,prot)                 t0_beta_lactose_cyt
  met(name~beta_lactose,loc~per,prot)                 t0_beta_lactose_per
  met(name~beta_lactose,loc~ex,prot)                  t0_beta_lactose_ex
  prot(name~LACY_MONOMER,loc~cyt,prot)                t0_LACY_MONOMER_cyt
  prot(name~LACY_MONOMER,loc~mem,prot)                t0_LACY_MONOMER_mem
  prot(name~LACY_MONOMER,loc~per,prot)                t0_LACY_MONOMER_per
  prot(name~LACY_MONOMER,loc~ex,prot)                 t0_LACY_MONOMER_ex
  cplx(name~BETAGALACTOSID_CPLX,loc~cyt,prot)         t0_BETAGALACTOSID_CPLX_cyt
  cplx(name~BETAGALACTOSID_CPLX,loc~mem,prot)         t0_BETAGALACTOSID_CPLX_mem
  cplx(name~BETAGALACTOSID_CPLX,loc~per,prot)         t0_BETAGALACTOSID_CPLX_per
  cplx(name~BETAGALACTOSID_CPLX,loc~ex,prot)          t0_BETAGALACTOSID_CPLX_ex
  cplx(name~GALACTOACETYLTRAN_CPLX,loc~cyt,prot)      t0_GALACTOACETYLTRAN_CPLX_cyt
  cplx(name~GALACTOACETYLTRAN_CPLX,loc~mem,prot)      t0_GALACTOACETYLTRAN_CPLX_mem
  cplx(name~GALACTOACETYLTRAN_CPLX,loc~per,prot)      t0_GALACTOACETYLTRAN_CPLX_per
  cplx(name~GALACTOACETYLTRAN_CPLX,loc~ex,prot)       t0_GALACTOACETYLTRAN_CPLX_ex
end species

begin reaction rules
  LACTOSE_MUTAROTATION:             met(name~alpha_lactose,loc~cyt,prot) <-> met(name~beta_lactose,loc~cyt,prot)    fwd_LACTOSE_MUTAROTATION, rvs_LACTOSE_MUTAROTATION
  GALACTOSE_MUTAROTATION:           met(name~alpha_GALACTOSE,loc~cyt,prot) <-> met(name~beta_GALACTOSE,loc~cyt,prot)    fwd_GALACTOSE_MUTAROTATION, rvs_GALACTOSE_MUTAROTATION
  GLUCOSE_MUTAROTATION:             met(name~alpha_glucose,loc~cyt,prot) <-> met(name~beta_glucose,loc~cyt,prot)    fwd_GLUCOSE_MUTAROTATION, rvs_GLUCOSE_MUTAROTATION
  TRANS_RXN_24:                     prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~per,prot) + met(name~alpha_lactose,loc~per,prot) <-> prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~cyt,prot) + met(name~alpha_lactose,loc~cyt,prot)    fwd_TRANS_RXN_24, rvs_TRANS_RXN_24
  TRANS_RXN_24_beta:                prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~per,prot) + met(name~beta_lactose,loc~per,prot) <-> prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~cyt,prot) + met(name~beta_lactose,loc~cyt,prot)    fwd_TRANS_RXN_24_beta, rvs_TRANS_RXN_24_beta
  TRANS_RXN_94:                     prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~per,prot) + met(name~MELIBIOSE,loc~per,prot) <-> prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~cyt,prot) + met(name~MELIBIOSE,loc~cyt,prot)    fwd_TRANS_RXN_94, rvs_TRANS_RXN_94
  RXN0_7215:                        prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~per,prot) + met(name~CPD_3561,loc~per,prot) <-> prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~cyt,prot) + met(name~CPD_3561,loc~cyt,prot)    fwd_RXN0_7215, rvs_RXN0_7215
  RXN0_7217:                        prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~per,prot) + met(name~CPD_3785,loc~per,prot) <-> prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~cyt,prot) + met(name~CPD_3785,loc~cyt,prot)    fwd_RXN0_7217, rvs_RXN0_7217
  RXN_17755:                        prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~per,prot) + met(name~CPD_3801,loc~per,prot) <-> prot(name~LACY_MONOMER,loc~cyt) + met(name~PROTON,loc~cyt,prot) + met(name~CPD_3801,loc~cyt,prot)    fwd_RXN_17755, rvs_RXN_17755
  BETAGALACTOSID_RXN:               cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_lactose,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_GALACTOSE,loc~cyt,prot) + met(name~beta_glucose,loc~cyt,prot)    fwd_BETAGALACTOSID_RXN, rvs_BETAGALACTOSID_RXN
  BETAGALACTOSID_RXN_alpha:         cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~alpha_lactose,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~alpha_GALACTOSE,loc~cyt,prot) + met(name~alpha_glucose,loc~cyt,prot)    fwd_BETAGALACTOSID_RXN_alpha, rvs_BETAGALACTOSID_RXN_alpha
  RXN0_5363:                        cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~alpha_lactose,loc~cyt,prot) <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~alpha_ALLOLACTOSE,loc~cyt,prot)    fwd_RXN0_5363, rvs_RXN0_5363
  RXN0_5363_beta:                   cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_lactose,loc~cyt,prot) <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_ALLOLACTOSE,loc~cyt,prot)    fwd_RXN0_5363_beta, rvs_RXN0_5363_beta
  ALLOLACTOSE_DEG_alpha:            cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~alpha_ALLOLACTOSE,loc~cyt,prot) + 0 <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~alpha_GALACTOSE,loc~cyt,prot) + met(name~alpha_glucose,loc~cyt,prot)    fwd_ALLOLACTOSE_DEG_alpha, rvs_ALLOLACTOSE_DEG_alpha
  ALLOLACTOSE_DEG_beta:             cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_ALLOLACTOSE,loc~cyt,prot) + 0 <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_GALACTOSE,loc~cyt,prot) + met(name~beta_glucose,loc~cyt,prot)    fwd_ALLOLACTOSE_DEG_beta, rvs_ALLOLACTOSE_DEG_beta
  RXN_17726:                        cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~CPD_3561,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_GALACTOSE,loc~cyt,prot) + met(name~Fructofuranose,loc~cyt,prot)    fwd_RXN_17726, rvs_RXN_17726
  RXN0_7219:                        cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~CPD_3785,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> cplx(name~BETAGALACTOSID_CPLX,loc~cyt) + met(name~beta_GALACTOSE,loc~cyt,prot) + met(name~D_ARABINOSE,loc~cyt,prot)    fwd_RXN0_7219, rvs_RXN0_7219
  GALACTOACETYLTRAN_RXN_galactose:  cplx(name~GALACTOACETYLTRAN_CPLX,loc~cyt) + met(name~beta_GALACTOSE,loc~cyt,prot) + met(name~ACETYL_COA,loc~cyt,prot) <-> cplx(name~GALACTOACETYLTRAN_CPLX,loc~cyt) + met(name~_6_Acetyl_beta_D_Galactose,loc~cyt,prot) + met(name~CO_A,loc~cyt,prot)    fwd_GALACTOACETYLTRAN_RXN_galactose, rvs_GALACTOACETYLTRAN_RXN_galactose
end reaction rules

end model
